CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Separate the different colors into different channels, so it is easier to segmentate subcellular components (red=nuclei; green=membrane)']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
    Select the input image:raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:raw_red
    Convert green to gray?:Yes
    Name the output image:raw_green
    Convert blue to gray?:Yes
    Name the output image:raw_blue
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
Threshold:[module_num:7|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notes:['Thresholding and smoothing the nuclei channel prior to segmentation.']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
    Select the input image:raw_red
    Name the output image:nuclei
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.7,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:8|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
    Select the input image:nuclei
    Name the output image:nuclei_holes
    Size of holes to fill:5

Watershed:[module_num:9|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notes:['Segmentation of the nuclei']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
    Select the input image:nuclei_holes
    Name the output object:watershed_nuclei
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:raw_red
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:15
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:watershed_nuclei
    Name the objects to be identified:membrane
    Select the method to identify the secondary objects:Distance - B
    Select the input image:OrigGray
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:watershed_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGray
    Name the output image:borders
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0613FF
    Select objects to display:watershed_nuclei

OverlayObjects:[module_num:13|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
    Input:raw
    Name the output image:filler
    Objects:watershed_nuclei
    Opacity:0.5

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:borders
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:png
    Output file location:Default Output Folder sub-folder|borders
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:filler
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segment
    Saved file format:png
    Output file location:Default Output Folder sub-folder|filler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\cellprofiler_segmentation\\data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:morph_
    Overwrite existing files without warning?:No
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